
global:
    # list of modules to load when starting
    startup: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

hardware:

    ServoMotor:
        module.Class: 'local.arduino_servo.LocalArduinoServo'
        # Arduino Params
        options:
            baud: 9600
            tmeout: 2
            port:
                - 'COM3'
            # Servo Motor Params
            pin: 5
            0 degree position: 750          #test with code ServoMotor._board.Servos.writeMicroseconds(5,750)
            90 degree position: 1650        #test with code ServoMotor._board.Servos.writeMicroseconds(5,1650)
            slow down time: 0               #s
            step size: 0.3                  #degree
            angle_range:
                - [0,90]


logic:

    FlipMirrorLogic:
        module.Class: 'local.flip_mirror_logic.FlipMirrorLogic'
        connect:
            servomotor1: 'ServoMotor'

        


gui:

    FlipMirrorGui:
        module.Class: 'local.flip_mirror.flipmirror.FlipMirrorGui'
        connect:
            localflipmirrorlogic: 'FlipMirrorLogic'