
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    StepMotor:
        module.Class: 'local.step_motor.StepMotor'
        port:
            - 'COM9'


logic:

    StepMotorLogic:
        module.Class: 'local.step_motor_logic.StepMotorLogic'
        connect:
            stepmotor1: 'StepMotor'

        

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    StepMotorGui:
        module.Class: 'local.step_motor.stepmotor.StepMotorGui'
        connect:
            stepmotorlogic: 'StepMotorLogic'

