
global:
    # list of modules to load when starting
    startup: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: '10.140.0.56'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    default_data_dir: 'C:\\Data\\'

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

hardware:

    tagger:
        module.Class: 'local.timetagger.TT'
        options:            
            
            channels_params:
                ch1:
                    delay: 10000
                    # triggerLevel: 2 # range 0.5V-2.5V, with 50 Ohms impedance usually half input Volts is read out
                ch2:
                    delay: 10000

                ch5:
                    delay: 70000
                    # triggerLevel: 2 # range 0.5V-2.5V, with 50 Ohms impedance usually half input Volts is read out
                ch6:
                    delay: 310000

            #test_channels: [1,2,8] #[1,2,3,4,5,6,7]#[1,2, 4, -4]
            combined_channels: # Alias for combined channels must not start with 'ch'
                DetectorChans:
                    - 'ch1'
                    - 'ch2'
                    - 'ch3'
                    - 'ch4'
                APDset1:
                    - 'ch1'
                    - 'ch2'
                APDset2:
                    - 'ch3'
                    - 'ch4'
                APDset3:
                    - 'ch11'
                    - 'ch12'
                APDset4:
                    - 'ch17'
                    - 'ch18'
        allow_remote: True

    tagger_dummy: # Use tagger_dummy for sps_setup when you don't have timetagger connected.
        module.Class: 'local.timetagger_dummy.TT'

    nicard1: #national instrument card for laser scanner and attocube
        module.Class: 'local.ni_card.NICard'
        options:
            device_name: 'Dev4'  

    nicard2: #national instrument card for scan mirror
        module.Class: 'local.ni_card.NICard'
        options:
            device_name: 'Dev3'  


    sps_setup: # Laser scanning and attocube control
        module.Class: 'local.nitt.NITT'
        connect:
            nicard: 'nicard1'
            timetagger: 'tagger'
        options:
            scanner_ao_channels:
                - 'AO0'
                - 'AO1'
                - 'AO2'
                - 'AO3'
            scanner_voltage_ranges:
                # - [0, 3.2] #RT
                # - [0, 3.2] #RT
                # - [0, 3.2] #RT
                
                - [0, 8] #LT
                - [0, 8] #LT
                - [0, 8] #LT
                - [-4, 4]

            scanner_position_ranges:
                # - [0, 50e-6] #RT
                # - [0, 50e-6] #RT
                # - [0, 50e-6] #RT
                - [0, 12e-6] #LT
                - [0, 12e-6] #LT
                - [0, 12e-6] #LT
                - [0, 8000]
                # - [0, 12400]
            scanner_clock_channel:
                - 'ctr0'
            trigger_clock_channel:
                - 'ctr1'
            pixel_clock_channel:
                - 'pfi0'
            trigger_pixel_clock_channel:
                - 'pfi1'
            trigger_pixel_clock_channel_2:
                - 'pfi2'
            timetagger_channels:
                - 'ch1'
                - 'ch2'
                - 'ch3'
                - 'ch4'
                - 'DetectorChans'
                - 'APDset1'
                - 'APDset2'
                - 'APDset3'
            timetagger_cbm_begin_channel:
                - 'ch7'
            timetagger_cbm_trigger_begin_channel:
                - 'ch9'
            scanner_ai_channels:
                - 'AI0'
                # - 'AI1'
                # - 'AI2'
                # - 'AI3'
                # - 'AI4'
            channel_labelsandunits:
                'ch1': {'label': 'Fluorescence', 'unit': 'c/s'}
                'ch2': {'label': 'Fluorescence', 'unit': 'c/s'}
                'ch3': {'label': 'Fluorescence', 'unit': 'c/s'}
                'ch4': {'label': 'Fluorescence', 'unit': 'c/s'}
                'DetectorChans': {'label': 'Fluorescence', 'unit': 'c/s'}
                'APDset1': {'label': 'Fluorescence', 'unit': 'c/s'}
                'APDset2': {'label': 'Fluorescence', 'unit': 'c/s'}
                'APDset3': {'label': 'Fluorescence', 'unit': 'c/s'}
                'AI0': {'label': 'Voltage', 'unit': 'V'}
                # 'AI1': {'label': 'Voltage', 'unit': 'V'}
                # 'AI2': {'label': 'Voltage', 'unit': 'V'}
                # 'AI3': {'label': 'Voltage', 'unit': 'V'}
                # 'AI4': {'label': 'Voltage', 'unit': 'V'}
            ai_voltage_ranges:
                - [-10,10]
                # - [-10,10]
                # - [-10,10]
                # - [-10,10]
                # - [-10,10]


    confocalhardware: # Scan mirror control
        module.Class: 'local.confocalnitt.ConfocalNITT'
        connect:
            nicard: 'nicard2'
            timetagger: 'tagger'
        options:
            scanner_ao_channels:
                - 'AO0'
                - 'AO1'
                - 'AO2'
                - 'AO3'
            scanner_voltage_ranges:
                # - [-8, 10]
                # - [-8, 10]
                - [-8, 8]
                - [-8, 8]
                - [-4, 4]
                - [-4, 4]
            scanner_position_ranges:
                # - [0, 236e-6]
                # - [0, 165e-6]
                - [0, 210e-6]
                - [0, 147e-6]
                - [0, 12e-6]
                - [0, 13000]
            scanner_clock_channel:
                - 'ctr0'
            pixel_clock_channel:
                - 'pfi0'
            timetagger_channels:
                - 'ch1'
                - 'ch2'
                - 'ch3'
                - 'ch4'
                - 'DetectorChans'
                - 'APDset1'
                - 'APDset2'
                - 'APDset3'
            timetagger_cbm_begin_channel:
                - 'ch8'
            scanner_ai_channels:
                - 'AI0'
                # - 'AI1'
                # - 'AI2'
                # - 'AI3'
                # - 'AI4'
            channel_labelsandunits:
                'ch1': {'label': 'Fluorescence', 'unit': 'c/s'}
                'ch2': {'label': 'Fluorescence', 'unit': 'c/s'}
                'ch3': {'label': 'Fluorescence', 'unit': 'c/s'}
                'ch4': {'label': 'Fluorescence', 'unit': 'c/s'}
                'DetectorChans': {'label': 'Fluorescence', 'unit': 'c/s'}
                'APDset1': {'label': 'Fluorescence', 'unit': 'c/s'}
                'APDset2': {'label': 'Fluorescence', 'unit': 'c/s'}
                'APDset3': {'label': 'Fluorescence', 'unit': 'c/s'}
                'AI0': {'label': 'Voltage', 'unit': 'V'}
                # 'AI1': {'label': 'Voltage', 'unit': 'V'}
                # 'AI2': {'label': 'Voltage', 'unit': 'V'}
                # 'AI3': {'label': 'Voltage', 'unit': 'V'}
                # 'AI4': {'label': 'Voltage', 'unit': 'V'}
            ai_voltage_ranges:
                - [-10, 10]
                # - [-10, 10]
                # - [-10, 10]
                # - [-10, 10]
                # - [-10, 10]
    
    stepmotor_cryo:
        module.Class: 'local.step_motor.StepMotor'
        options:
            port:
                - 'COM6'
        allow_remote: True
    
    stepmotor_laser:
        module.Class: 'local.step_motor.StepMotor'
        options:
            port:
                - 'COM4'

    stepmotor_dummy:
        module.Class: 'local.step_motor_dummy.StepMotor'

    high_finesse_wavemeter:
        module.Class: 'local.high_finesse_wavemeter.HighFinesseWavemeter'

    high_finesse_wavemeter_dummy:
        module.Class: 'local.high_finesse_wavemeter_dummy.HighFinesseWavemeter'

    newfocus_8752_tcp_client:
        module.Class: 'local.tcpclient.TCP_client.TCPClient'
        options:
            ip: '10.140.1.232'
            port: 23
            timeout: 0.1
            buffer: 1024

    rigol_dp832_client:
        module.Class: 'local.tcpclient.TCP_client.TCPClient'
        options:
            ip: '10.140.1.99'
            port: 5555
            timeout: 0.1
            buffer: 1024

    Switch1:
        module.Class: 'local.shelly.ShellyPro'
        options:
            ip: '10.140.1.242'


    Switch2:
        module.Class: 'local.shelly.ShellyPro'
        options:
            ip: '10.140.1.38'

    # high_finesse_client:
    #    native_module_name: 'high_finesse_client' # only works when you first activate server side module. 
    #    address: '10.140.0.52'                    #Unknown problems come, when you turn off server side module when client is still running!!
    #    port: 1144

    temperature_controller:
        module.Class: 'local.Omega_temperature_controller.OmegaTemperatureController'
        options:
            port:
                '502'


    thorlabs_camera:
        module.Class: 'local.camera.TLcam.TLcam'
        options:
            dll_location: 'C:\\Program Files\\Thorlabs\\Scientific Imaging\\ThorCam' # path to library file
            exposure: 0.2
            gain: 0.0
            buffer_size: 0 # the longer the buffer size, the slower you can get the first frame, the smoother in the long term measurement.

    thorlabspm:
        module.Class: 'local.thorlabspm.ThorlabsPM'

    fugsource_tcp_client:
        module.Class: 'local.tcpclient.TCP_client.TCPClient'
        options:
            ip: '10.140.0.211'
            port: 2101
            timeout: 0.01
            buffer: 1024
    
    fugsource_tcp_client_dummy:
        module.Class: 'local.tcpclient.TCP_client_dummy.TCPClient'
        options:
            ip: '10.140.0.211'
            port: 2101
            timeout: 0.01
            buffer: 1024

    iScan:
        module.Class: 'local.tem_iscan.iScan'
        options:
            port:
                - 'COM24'


    wave_instreamer:
        module.Class: 'wavemeter.high_finesse_wavemeter.HighFinesseWavemeter'
        connect:
            proxy: wavemeter_proxy
        options:
            channels:
                dye_laser:
                    switch_ch: 4   # channel on the wavemeter switch
                    unit: 'm'    # wavelength (m) or frequency (Hz)
                    #exposure: 10  # exposure time in ms
        allow_remote: True


    wavemeter_proxy:
        module.Class: 'wavemeter.high_finesse_proxy.HighFinesseProxy'
        options:
            watchdog_interval: 1.0  # how often the watchdog checks for errors/changes in s


    # Attocube-style nanopositioner, talked to over a raw TCP socket (an
    # ASCII console on a password-protected port). CHANGE "ip" to your
    # device's real IP address.
    nanopositioner:
        module.Class: 'local.nanopositioner_controller.NanopositionerController'
        options:
            ip: '10.140.0.212'          # CHANGE ME
            port: 7231
            password: '123456'
            timeout: 1.0
            x_axis: 5
            y_axis: 6
            z_axis: 4



    # Newport picomotor controller, talked to over a raw TCP socket.
    # CHANGE "ip" to your device's real IP address.
    picomotor:
        module.Class: 'local.picomotor_controller.PicomotorController'
        options:
            ip: '10.140.0.213'          # CHANGE ME
            port: 23
            timeout: 1.0
            x1_axis: 1
            y1_axis: 2
            x2_axis: 3
            y2_axis: 4
            
logic:

    wavemeter_scanning_logic:
        module.Class: 'wavemeter_scanning_logic_3.WavemeterLogic'
        connect:
            streamer: wave_instreamer # instream_dummy_wavemeter #wave_instreamer
            counterlogic: timeserieslogic

    timetagger_instream_interfuse:
        module.Class: 'local.timetagger_instream_interfuse.TTInstreamInterfuse'
        connect:
            timetagger: 'tagger'
            nicard: 'nicard1'
        options:
            available_channels:  
                - 'ch1'
                - 'ch2'
                - 'ch3'
                - 'ch4'
                - 'ch5'
                - 'ch11'
                - 'ch12'
                - 'DetectorChans'
                - 'APDset1'
                - 'APDset2'
                - 'APDset3'
            sample_rate: 50
            buffer_size: 10000000
            analog_channels:
                - 'ai0'
            analog_voltage_ranges:
                - [-10, 10]

    timeserieslogic:
        module.Class: 'local.time_series_reader_logic.TimeSeriesReaderLogic'
        connect:
            _streamer_con: 'timetagger_instream_interfuse'
            _savelogic_con: 'savelogic'
        options:
            max_frame_rate: 10  # optional (10Hz by default) should be > 2/trace_window_size
            calc_digital_freq: True  # optional (True by default)

    shutterlogic:
        module.Class: 'local.shutter_controller_logic.ShutterLogic'
        connect:
            nicard: 'nicard1'
        options:
            do_channel:
                - 'pfi5'  # free digital line on nicard1/Dev4, adjust to actual shutter wiring
            task_name: 'shutter'  # unique DAQmx task name, must stay unique per shutter instance
            open_level: True  # set False if the shutter driver is wired active-low
    
    savelogic:
        module.Class: 'local.save_logic.SaveLogic'
        options:
            win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
            unix_data_directory: 'Data/'
            log_into_daily_directory: False # always False conflicts with new qudi
            save_pdf: True
            save_png: True
    
    sps_confocallogic:
        module.Class: 'local.sps_confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'sps_scanner_tilt_interfuse'
            loopscanlogic1: 'sps_loopscanlogic'
            savelogic: 'savelogic'

    sm_confocallogic:
        module.Class: 'local.sps_confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'sm_scanner_tilt_interfuse'
            loopscanlogic1: 'sm_loopscanlogic'
            savelogic: 'savelogic'
    
    iscan_laserscannerlogic:
        module.Class: 'local.iscan_laser_scanner_logic.LaserScannerLogic'
        connect:
            laserscanner1: 'sps_setup'
            iscan: 'iScan'
            customscanlogic1: 'sps_customscanlogic'
            savelogic: 'savelogic'

    nf8752:
        module.Class: 'local.newfocus8752_logic.NF8752Logic'
        connect:
            tcpclient: 'newfocus_8752_tcp_client'

    dp832:
        module.Class: 'local.rigol_dp832_logic.DP832Logic'
        connect:
            tcpclient: 'rigol_dp832_client'

    timetaggerlogic:
        module.Class: 'local.timetagger_logic.TimeTaggerLogic'
        connect:
            timetagger: 'tagger'
            savelogic: 'savelogic' 

    qberlogic: # live count rate + QBER, shares the 'tagger' module instead of opening its own TimeTagger
        module.Class: 'local.qber_logic.QBERLogic'
        connect:
            timetagger: 'tagger'
        options:
            detector_channels: {'R': 1, 'L': 2, 'H': 3, 'V': 4}
            awg_channel: 5
            laser_channel: 6
            # Effective delays in ps, applied only while the QBER measurement runs and restored on stop.
            # Input delays from tagger/channels_params are compensated (compensate_input_delay).
            channel_delays: {1: -8000, 2: -9000, 3: -10800, 4: -7800, 5: 100000}
            compensate_input_delay: True
            trigger_levels: {1: 0.5, 2: 0.5, 3: 0.5, 4: 0.5, 6: -0.5}  # restored on stop
            use_conditional_filter: True  # laser/AWG filtered by detector clicks, restored on stop
            qkd_frequency: 5.0e6        # Hz
            window_fraction: 0.75       # 0..1, narrows the filtering windows
            window_displacement: 0.25   # -1 (left) .. 0 (centre) .. +1 (right)
            window_states: {'H': 1, 'R': 2, 'V': 3, 'L': 4}  # sent state -> time slot
            bin_width: 1000             # ps
            qber_integration_time: 0.2  # s
            countrate_interval: 0.05    # s
            history_window: 10          # s


    joystickcontrollerlogic:
        module.Class: 'local.joystick_controller_logic.JoystickControllerLogic'
        # All connectors are optional: to leave a device out, comment out its
        # module above AND its line here (same as for sps_customscanlogic).
        # If you comment out all three lines, comment out "connect:" too.
        connect:
            nanopositioner: 'nanopositioner'
            #picomotor: 'picomotor'
            nf8752: 'nf8752'
        options:
            step_sizes: [1, 10, 40, 200]
            poll_interval: 0.15               # seconds between controller polls
            nf8752_velocity: 100              # NF8752 steps/s (1..2000)
            nf8752_acceleration: 500          # NF8752 steps/s^2 (1..32000)
            trigger_blind: 20                 # ignore L2/R2 analog readings below this magnitude (0-255 scale)
            emergency_max_delay: 1.0          # seconds allowed between two "PS" button taps to trigger emergency stop
            # Only used if your controller/driver reports the D-pad as a "hat"
            # (SDL2 reports the PS5 D-pad as buttons 11-14, see button_map).
            dpad_hat_index: 0
            dpad_invert_x: False              # flip D-pad left/right if your directions are mirrored
            dpad_invert_y: False              # flip D-pad up/down
            # Button/axis indices can depend on controller/driver/OS. Defaults
            # are SDL2's PS5 (DualSense) layout. If a button does nothing, turn
            # on "Diagnostic mode" in the GUI (Tools menu), press the button and
            # copy the printed index here.
            button_map:
                cross: 0
                circle: 1
                square: 2
                triangle: 3
                share: 4                      # "Create" button, cycles step size
                playstation: 5                # double-tap = emergency stop
                l1: 9
                r1: 10
                dpad_up: 11
                dpad_down: 12
                dpad_left: 13
                dpad_right: 14
            trigger_axes:
                l2: 4
                r2: 5


    sps_scanner_tilt_interfuse:
        module.Class: 'local.sps_scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'sps_setup'

    sm_scanner_tilt_interfuse:
        module.Class: 'local.sm_scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'confocalhardware'

    fitlogic:
        module.Class: 'local.fit_logic.FitLogic'

    sps_optimizerlogic:
        module.Class: 'local.optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'sps_scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    sm_optimizerlogic:
        module.Class: 'local.optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'sm_scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    stepmotor_cryo_logic:
        module.Class: 'local.step_motor_logic.StepMotorLogic'
        connect:
            stepmotor1: 'stepmotor_cryo'

    stepmotor_laser_logic:
        module.Class: 'local.step_motor_logic.StepMotorLogic'
        connect:
            stepmotor1: 'stepmotor_laser'

    sps_loopscanlogic:
        module.Class: 'local.sps_loop_scan_logic.SPSLoopScanLogic'
        connect:
            stepmotor1: 'stepmotor_cryo'
            nicard: 'nicard1' 

    sm_loopscanlogic:
        module.Class: 'local.sps_loop_scan_logic.SPSLoopScanLogic'
        connect:
            stepmotor1: 'stepmotor_cryo'
            nicard: 'nicard2' # nicard for scanmirror line trigger output

    sps_customscanlogic:
        module.Class: 'local.sps_custom_scan_logic.SPSCustomScanLogic'
        connect:
            #stepmotor1: 'stepmotor_cryo'
            #stepmotor2: 'stepmotor_laser'
            #thorlabspm1: 'thorlabspm'
            nicard: 'nicard1' # should be same as laser scanner
            # wavemeter: 'high_finesse_wavemeter'
            # fugsourcelogic: 'fugsource_logic'
            timetaggerlogic: 'timetaggerlogic'
            #dp832logic: 'dp832'

    camera_logic:
        module.Class: 'local.camera_logic.CameraLogic'
        connect:
            camera: 'thorlabs_camera'
        options:
            minimum_exposure_time: 0.05

    fugsource_logic:
        module.Class: 'local.fugsource_logic.FugSourceLogic'
        connect:
            tcpclient: 'fugsource_tcp_client'   
         
    autoalignmentlogic:
        module.Class: 'local.autoalignment.autoalignmentLogic'
        connect:
            pmc: 'nf8752'
            #thorlabspm1: 'thorlabspm'
            _time_series_logic_con: 'timeserieslogic'
        options:
            timetagger_read_channel: 'APDset3'



gui:
    autoalignment_gui:
        module.Class: 'local.autoalignment.autoalignmentgui.AutoAlignmentGui'
        connect:
            autoalignmentlogic1: 'autoalignmentlogic'

    timeseries:
        module.Class: 'local.time_series.time_series_gui.TimeSeriesGui'
        connect:
            _time_series_logic_con: 'timeserieslogic'
            _shutter_logic_con: 'shutterlogic'
        options:
            use_antialias: True  # optional, set to False if you encounter performance issues

    attocube_controller:
        module.Class: 'local.sps_confocal.sps_confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'sps_confocallogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'sps_optimizerlogic'
        options:
            fixed_aspect_ratio_xy: True
            fixed_aspect_ratio_depth: True
            image_x_padding: 0.02
            image_y_padding: 0.02
            image_z_padding: 0.02
            default_meter_prefix: 'u'
    
    scanmirror_controller:
        module.Class: 'local.sps_confocal.sm_confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'sm_confocallogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'sm_optimizerlogic'
        options:
            fixed_aspect_ratio_xy: True
            fixed_aspect_ratio_depth: True
            image_x_padding: 0.02
            image_y_padding: 0.02
            image_z_padding: 0.02
            default_meter_prefix: 'u'

    timetagger:
        module.Class: 'local.timetagger.timetagger.TTGui'
        connect:
            timetaggerlogic: 'timetaggerlogic'
            savelogic: 'savelogic'

    qber:
        module.Class: 'local.qber.qbergui.QBERGui'
        connect:
            qberlogic: 'qberlogic'

    iscan_laserscanner:
        module.Class: 'local.sps_laserscanner.iscan_laserscannergui.LaserscannerGui'
        connect:
            laserscannerlogic1: 'iscan_laserscannerlogic'
            savelogic: 'savelogic'

    stepmotor_cryo_gui:
        module.Class: 'local.step_motor.stepmotor.StepMotorGui'
        connect:
            stepmotorlogic: 'stepmotor_cryo_logic'

    stepmotor_laser_gui:
        module.Class: 'local.step_motor.stepmotor.StepMotorGui'
        connect:
            stepmotorlogic: 'stepmotor_laser_logic'

    camera_gui:
        module.Class: 'local.camera.cameragui.CameraGui'
        connect:
            camera_logic: camera_logic


    wavemeter_scanning_gui:
        module.Class: 'wavemeter.wavemeter_scanning_gui.WavemeterHistogramGui'
        connect:
            _wavemeter_histogram_logic_con: wavemeter_scanning_logic

    joystickcontrollergui:
        module.Class: 'local.joystick_controller.joystickcontrollergui.JoystickControllerGui'
        connect:
            joystickcontrollerlogic1: 'joystickcontrollerlogic'
